####################################
# Chamber plug made of G4_WATER  will overlay CTDI phantom when measurement takes place in that particular port-otherwise will be PMMA
sv:Ph/Default/LayeredMassGeometryWorlds = 5 "ChamberPlugCentre" "ChamberPlugTop" "ChamberPlugBottom" "ChamberPlugLeft" "ChamberPlugRight"

# PMMA
sv:Ma/PMMA/Components = 3 "Carbon" "Hydrogen" "Oxygen"
uv:Ma/PMMA/Fractions = 3  0.599848  0.080538  0.319614
d:Ma/PMMA/Density = 1.190 g/cm3
d:Ma/PMMA/MeanExcitationEnergy = 85.7 eV #nist say 74 eV? #85.7 eV on topas example
s:Ma/PMMA/DefaultColor = "Silver"


#Scorers#######################################################
s:Ge/CTDI/Type="TsCylinder"
s:Ge/CTDI/Parent="World"
s:Ge/CTDI/Material="PMMA"
d:Ge/CTDI/RMin=0.0 mm
d:Ge/CTDI/RMax=80.0 mm
d:Ge/CTDI/HL=72.5 mm
d:Ge/CTDI/SPhi=0. deg
d:Ge/CTDI/DPhi=360. deg
d:Ge/CTDI/TransX=0.0 mm
d:Ge/CTDI/TransY=0.0 mm
d:Ge/CTDI/TransZ=0.0 mm
d:Ge/CTDI/RotX=-90 deg

#ChamberPlugs
s:Ge/ChamberPlugCentre/Type="TsCylinder"
s:Ge/ChamberPlugCentre/Parent="World"
s:Ge/ChamberPlugCentre/Material="PMMA"
d:Ge/ChamberPlugCentre/RMin=0.0 mm
d:Ge/ChamberPlugCentre/RMax=6.55 mm
d:Ge/ChamberPlugCentre/HL=50.0 mm
d:Ge/ChamberPlugCentre/SPhi=0. deg
d:Ge/ChamberPlugCentre/DPhi=360. deg
d:Ge/ChamberPlugCentre/TransX=0.0 mm
d:Ge/ChamberPlugCentre/TransY=0.0 mm
d:Ge/ChamberPlugCentre/TransZ=0.0 mm
b:Ge/ChamberPlugCentre/isParallel="True"
d:Ge/ChamberPlugCentre/RotX=-90 deg
s:Ge/ChamberPlugCentre/color="skyblue"

s:Ge/ChamberPlugTop/Type="TsCylinder"
s:Ge/ChamberPlugTop/Parent="World"
s:Ge/ChamberPlugTop/Material="PMMA"
d:Ge/ChamberPlugTop/RMin=0.0 mm
d:Ge/ChamberPlugTop/RMax=6.55 mm
d:Ge/ChamberPlugTop/HL=50.0 mm
d:Ge/ChamberPlugTop/SPhi=0. deg
d:Ge/ChamberPlugTop/DPhi=360. deg
d:Ge/ChamberPlugTop/TransX=0.0 mm
d:Ge/ChamberPlugTop/TransY=0.0 mm
d:Ge/ChamberPlugTop/TransZ=-70.0 mm
b:Ge/ChamberPlugTop/isParallel="True"
d:Ge/ChamberPlugTop/RotX=-90 deg
s:Ge/ChamberPlugTop/color="Magenta"

s:Ge/ChamberPlugBottom/Type="TsCylinder"
s:Ge/ChamberPlugBottom/Parent="World"
s:Ge/ChamberPlugBottom/Material="PMMA"
d:Ge/ChamberPlugBottom/RMin=0.0 mm
d:Ge/ChamberPlugBottom/RMax=6.55 mm
d:Ge/ChamberPlugBottom/HL=50.0 mm
d:Ge/ChamberPlugBottom/SPhi=0. deg
d:Ge/ChamberPlugBottom/DPhi=360. deg
d:Ge/ChamberPlugBottom/TransX=0.0 mm
d:Ge/ChamberPlugBottom/TransY=0.0 mm
d:Ge/ChamberPlugBottom/TransZ=70.0 mm
b:Ge/ChamberPlugBottom/isParallel="True"
d:Ge/ChamberPlugBottom/RotX=-90 deg
s:Ge/ChamberPlugBottom/color="Lime"

s:Ge/ChamberPlugLeft/Type="TsCylinder"
s:Ge/ChamberPlugLeft/Parent="World"
s:Ge/ChamberPlugLeft/Material="PMMA"
d:Ge/ChamberPlugLeft/RMin=0.0 mm
d:Ge/ChamberPlugLeft/RMax=6.55 mm
d:Ge/ChamberPlugLeft/HL=50.0 mm
d:Ge/ChamberPlugLeft/SPhi=0. deg
d:Ge/ChamberPlugLeft/DPhi=360. deg
d:Ge/ChamberPlugLeft/TransX=-70.0 mm
d:Ge/ChamberPlugLeft/TransY=0.0 mm
d:Ge/ChamberPlugLeft/TransZ=0.0 mm
b:Ge/ChamberPlugLeft/isParallel="True"
d:Ge/ChamberPlugLeft/RotX=-90 deg
s:Ge/ChamberPlugLeft/color="Orange"

s:Ge/ChamberPlugRight/Type="TsCylinder"
s:Ge/ChamberPlugRight/Parent="World"
s:Ge/ChamberPlugRight/Material="PMMA"
d:Ge/ChamberPlugRight/RMin=0.0 mm
d:Ge/ChamberPlugRight/RMax=6.55 mm
d:Ge/ChamberPlugRight/HL=50.0 mm
d:Ge/ChamberPlugRight/SPhi=0. deg
d:Ge/ChamberPlugRight/DPhi=360. deg
d:Ge/ChamberPlugRight/TransX=70.0 mm
d:Ge/ChamberPlugRight/TransY=0.0 mm
d:Ge/ChamberPlugRight/TransZ=0.0 mm
b:Ge/ChamberPlugRight/isParallel="True"
d:Ge/ChamberPlugRight/RotX=-90 deg
s:Ge/ChamberPlugRight/color="Brown"


##Scoring###########################################

#Scoringalongcylindricalaxis
s:Sc/ChamberPlugDose_tle/Quantity="TrackLengthEstimator"#Zbinningcausescreationofaparallelworldforscoring
s:Sc/ChamberPlugDose_tle/InputFile="Muen.dat"
s:Sc/ChamberPlugDose_tle/Component="ChamberPlugCentre"
s:Sc/ChamberPlugDose_tle/IfOutputFileAlreadyExists="Overwrite"
i:Sc/ChamberPlugDose_tle/ZBins=100 #0.1 cm/bin1.0mm/bin

s:Sc/ChamberPlugDose_dtm/Quantity="DoseToMaterial"#Zbinningcausescreationofaparallelworldforscoring
s:Sc/ChamberPlugDose_dtm/Component="ChamberPlugCentre"
s:Sc/ChamberPlugDose_dtm/IfOutputFileAlreadyExists="Overwrite"
i:Sc/ChamberPlugDose_dtm/ZBins=100 #0.1 cm/bin1.0mm/bin
s:Sc/ChamberPlugDose_dtm/Material="Air"
b:Sc/ChamberPlugDose_dtm/PreCalculateStoppingPowerRatios ="True"

s:Sc/ChamberPlugDose_dtw/Quantity="DoseToWater"#Zbinningcausescreationofaparallelworldforscoring
s:Sc/ChamberPlugDose_dtw/Component="ChamberPlugCentre"
s:Sc/ChamberPlugDose_dtw/IfOutputFileAlreadyExists="Overwrite"
b:Sc/ChamberPlugDose_dtw/PreCalculateStoppingPowerRatios ="True"
i:Sc/ChamberPlugDose_dtw/ZBins=100 #0.1 cm/bin1.0mm/bin

s:Sc/ChamberPlugDose_tle/OutputFile="ChamberPlugCentre_tle"
s:Sc/ChamberPlugDose_dtm/OutputFile="ChamberPlugCentre_dtm"
s:Sc/ChamberPlugDose_dtw/OutputFile="ChamberPlugCentre_dtw"